PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroopselfmade
  keyboardBackend = ioHub
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Routines
  Routine Main
    TextComponent stimuli
      color [set every repeat] = $letterColor
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent resp
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Willkommen_2
    TextComponent Willkommen
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Willkommen zu dieser Studie.

        Hier sind die Instruktionen: ...

        Weiter mit jeder Taste.
    KeyboardComponent willkommen_weiter
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine outro
    TextComponent OutroText
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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      text:
        Danke!

        Tschüss.
Flow
  Routine Willkommen_2
  LoopInitiator loop1 loopType="TrialHandler"
    conditionsFile = Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'rot', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
      {'word': 'rot', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'word': 'grün', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
      {'word': 'grün', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'word': 'blau', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'word': 'blau', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
    Routine Main
  LoopTerminator loop1
  Routine outro
